#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:
    myawg:
        module.Class: 'awg.tektronix_awg7k.AWG7k'
        awg_visa_address: 'TCPIP0::dhcp-140-247-189-146.fas.harvard.edu::inst0::INSTR'
        awg_ip_address: '140.247.189.146'

    timetaggerFast:
        module.Class: 'swabian_instruments.timetagger_fast_counter.TimeTaggerFastCounter'
        timetagger_channel_apd_0: 0
        timetagger_channel_apd_1: 1
        timetagger_channel_detect: 7
        timetagger_channel_sequence: 6
        timetagger_sum_channels: True

    mw_source_smc100a:
        module.Class: 'microwave.mw_source_smbv.MicrowaveSmbv'
        gpib_address: 'GPIB0::29::INSTR'
        gpib_address: 'GPIB0::29::INSTR'
        gpib_timeout: 10

logic:
    kernellogic:
        module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'
        remoteaccess: True

    sequencegeneratorlogic:
        module.Class: 'pulsed.sequence_generator_logic.SequenceGeneratorLogic'
        #assets_storage_path: 'C:/Users/<username>/saved_pulsed_assets'
        #additional_predefined_methods_path: 'C:\\Custom_dir'  # optional
        #additional_sampling_functions_path: 'C:\\Custom_dir'  # optional
        #overhead_bytes: 4294967296  # Not properly implemented yet
        connect:
            pulsegenerator: 'myawg'

    pulsedmeasurementlogic:
        module.Class: 'pulsed.pulsed_measurement_logic.PulsedMeasurementLogic'
        raw_data_save_type: 'text'  # optional
        #additional_extraction_path: 'C:\\Custom_dir\\Methods'  # optional
        #additional_analysis_path: 'C:\\Custom_dir\\Methods'  # optional
        connect:
            fastcounter: 'timetaggerFast'
            pulsegenerator: 'myawg'
            fitlogic: 'fitlogic'
            savelogic: 'savelogic'
            microwave: 'mw_source_smc100a'

    pulsedmasterlogic:
        module.Class: 'pulsed.pulsed_master_logic.PulsedMasterLogic'
        connect:
            pulsedmeasurementlogic: 'pulsedmeasurementlogic'
            sequencegeneratorlogic: 'sequencegeneratorlogic'

    fitlogic:
        module.Class: 'fit_logic.FitLogic'

    savelogic:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:/Data'   # DO NOT CHANGE THE DIRECTORY HERE! ONLY IN THE CUSTOM FILE!
        unix_data_directory: 'Data/'
        log_into_daily_directory: True

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

    pulsedmeasurement:
        module.Class: 'pulsed.pulsed_maingui.PulsedMeasurementGui'
        connect:
            pulsedmasterlogic: 'pulsedmasterlogic'
