#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:
    myawg:
        module.Class: 'awg.tektronix_awg7k.AWG7k'
        awg_visa_address: 'TCPIP0::dhcp-140-247-189-146.fas.harvard.edu::inst0::INSTR'
        awg_ip_address: '140.247.189.146'

logic:
    kernellogic:
        module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'
        remoteaccess: True

    sequencegeneratorlogic:
        module.Class: 'pulsed.sequence_generator_logic.SequenceGeneratorLogic'
        #assets_storage_path: 'C:/Users/<username>/saved_pulsed_assets'
        #additional_predefined_methods_path: 'C:\\Custom_dir'  # optional
        #additional_sampling_functions_path: 'C:\\Custom_dir'  # optional
        #overhead_bytes: 4294967296  # Not properly implemented yet
        connect:
            pulsegenerator: 'myawg'

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'
